<?xml version="1.0" encoding="UTF-8"?>
<configuration>
  <version>2</version>

	<readers>
		<reader>
			<dll>gadgetron_core_readers</dll>
			<classname>AcquisitionReader</classname>
		</reader>
		
		<reader>
			<dll>gadgetron_core_readers</dll>
			<classname>WaveformReader</classname>
		</reader>
	</readers>

	  <writers>
		<writer>
			<dll>gadgetron_core_writers</dll>
			<classname>ImageWriter</classname>
		</writer>
	  </writers>
		
	  <stream>
		<gadget>
		  <classname>NoiseAdjustGadget</classname>
		  <dll>gadgetron_mricore</dll>
		</gadget>

		<!--<gadget>
		  <classname>RemoveROOversamplingGadget</classname>
		  <dll>gadgetron_mricore</dll>
		</gadget> -->

		<gadget>
		  <classname>SpiralAccumulateGadget</classname>
		  <dll>libmygadgetron_spiral.so</dll>
		  <property><name>gradient_delay_us</name><value>2.0</value></property>
		  <property><name>adc_shift_us</name><value>0.0</value></property>
		</gadget>

		<gadget>
		  <classname>NonCartesianGridding</classname>
		  <dll>mygadgetron_spiral</dll>
		</gadget>

		 <gadget>
		  <classname>ExtractGadget</classname>
		  <property><name>extract_magnitude</name><value>true</value></property>
		  <property><name>extract_real</name><value>false</value></property>
		  <dll>gadgetron_mricore</dll>
		</gadget>
		<!-- Image Array Scaling-->
		<gadget>
			<name>Scaling</name>
			<dll>gadgetron_mricore</dll>
			<classname>GenericReconImageArrayScalingGadget</classname>

			<!-- parameters for debug and timing -->
			<property><name>perform_timing</name><value>false</value></property>
			<property><name>verbose</name><value>true</value></property>

			<property><name>min_intensity_value</name><value>64</value></property>
			<property><name>max_intensity_value</name><value>4095</value></property>
			<property><name>scalingFactor</name><value>1.0</value></property>
			<property><name>use_constant_scalingFactor</name><value>true</value></property>
			<property><name>auto_scaling_only_once</name><value>true</value></property>
			<property><name>scalingFactor_dedicated</name><value>1.0</value></property>
		</gadget> 
		<gadget>
			<name>aUtoScaling</name>
			<dll>gadgetron_mricore</dll>
			<classname>AutoScaleGadget</classname>
		</gadget> 

		<!-- ImageArray to images -->
		<gadget>
			<name>ImageArraySplit</name>
			<dll>gadgetron_mricore</dll>
			<classname>ImageArraySplitGadget</classname>
		</gadget>
	   
		<!-- after recon processing -->
		<gadget>
			<name>ComplexToFloatAttrib</name>
			<dll>gadgetron_mricore</dll>
			<classname>ComplexToFloatGadget</classname>
		</gadget>
	
		<gadget>
			<name>FloatToShortAttrib</name>
			<dll>gadgetron_mricore</dll>
			<classname>FloatToUShortGadget</classname>

			<property><name>max_intensity</name><value>4095</value></property>
			<property><name>min_intensity</name><value>0</value></property>
			<property><name>intensity_offset</name><value>0</value></property>
		</gadget>

		<gadget>
			<name>ImageFinish</name>
			<dll>gadgetron_mricore</dll>
			<classname>ImageFinishGadget</classname>
		</gadget>
		
	</stream>

</configuration>
